// This CellML file was generated on 13/06/2012 at 22:45:06 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2012 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Severi; Given Stefano; Orgname University of Bologna; Orgunit Biomedical Engineering Laboratory - DEIS
// created: W3CDTF 2012
// title: An updated computational model of rabbit sinoatrial action potential to investigate the mechanisms of heart rate modulation.
// reference: subject_type keyword; electrophysiology; cardiac
// reference: Pubmed_id 22711956; Family Severi; Given S; Family Fantini; Given M; Family Charawi; Given L A; Family DiFrancesco; Given D; title An updated computational model of rabbit sinoatrial action potential to investigate the mechanisms of heart rate modulation.; title The Journal of Physiology; volume 590; first_page 4438; last_page 4499
def model severi_fantini_charawi_difrancesco_2012 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millivolt_second as
    unit millivolt;
    unit second;
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_second as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit millimetre as
    unit metre {pref: milli};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit millimetre3 as
    unit metre {pref: milli, expo: 3};
  enddef;
  def unit litre_millimetre3 as
    unit litre;
    unit millimetre3 {expo: -1};
  enddef;
  def unit micrometre_per_femtometre as
    unit micrometre;
    unit metre {pref: femto, expo: -1};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp Membrane as
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var C: microF {init: 3.2e-5};
    var RTONF: millivolt {pub: out};
    var time: second {pub: in, priv: out};
    var i_f: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_CaL: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    var i_KACh: nanoA {pub: in};
    var V: millivolt {pub: out};
    var clamp_mode: dimensionless {init: 0};
    var V_clamp: millivolt {priv: in};
    var V_ode: millivolt {init: -52};
    var i_tot: nanoA;
    i_tot = i_f+i_Kr+i_Ks+i_to+i_NaK+i_NaCa+i_Na+i_CaL+i_CaT+i_KACh;
    ode(V_ode, time) = -i_tot/C;
    RTONF = R*T/F;
    V = sel
      case clamp_mode >= 1{dimensionless}:
        V_clamp;
      otherwise:
        V_ode;
    endsel;
  enddef;

  def comp Voltage_clamp as
    var t_holding: second {init: 0.5};
    var t_test: second {init: 0.5};
    var V_clamp: millivolt {pub: out};
    var V_test: millivolt {init: -35};
    var V_holding: millivolt {init: -45};
    var time: second {pub: in};
    V_clamp = sel
      case (time > t_holding) and (time < t_holding+t_test):
        V_test;
      otherwise:
        V_holding;
    endsel;
  enddef;

  def comp Rate_modulation_experiments as
    var Iva_3_uM: dimensionless {init: 0, pub: out};
    var Cs_5_mM: dimensionless {init: 0, pub: out};
    var ACh: millimolar {init: 0, pub: out};
    var Iso_1_uM: dimensionless {init: 0, pub: out};
    var BAPTA_10_mM: dimensionless {init: 0, pub: out};
  enddef;

  def comp Ionic_values as
    var Nai: millimolar {pub: in};
    var Nao: millimolar {init: 140, pub: out};
    var Ki: millimolar {init: 140, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Ca_sub: millimolar {pub: in};
    var Cao: millimolar {init: 1.8, pub: out};
    var RTONF: millivolt {pub: in};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Ko/Ki);
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Ca_sub);
  enddef;

  def comp Nai_concentration as
    var Nai: millimolar {pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var V_sub: millimetre3 {pub: in};
    var V_i: millimetre3 {pub: in};
    var i_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_fNa: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    var Nai_: millimolar {init: 7.5};
    var BAPTA_10_mM: dimensionless {pub: in};
    ode(Nai_, time) = -1{mA_nA}*(i_Na+i_fNa+i_siNa+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(1{litre_millimetre3}*(V_i+V_sub)*F);
    Nai = sel
      case BAPTA_10_mM > 0{dimensionless}:
        7.5{millimolar};
      otherwise:
        Nai_;
    endsel;
  enddef;

  def comp i_f as
    var Iva_3_uM: dimensionless {pub: in};
    var Cs_5_mM: dimensionless {pub: in};
    var ACh: millimolar {pub: in, priv: out};
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    var ICs_on_Icontrol: dimensionless {pub: out};
    var i_f: nanoA {pub: out};
    var i_fNa: nanoA {pub: out};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var i_fK: nanoA {pub: out};
    var g_f_Na: microS {pub: out};
    var g_f_K: microS {pub: out};
    var Km_f: millimolar {init: 45};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var RTONF: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var y: dimensionless {priv: in};
    g_f_Na = sel
      case Iva_3_uM >= 1{dimensionless}:
        0.03{microS}*(1{dimensionless}-0.66{dimensionless});
      otherwise:
        0.03{microS};
    endsel;
    g_f_K = sel
      case Iva_3_uM >= 1{dimensionless}:
        0.03{microS}*(1{dimensionless}-0.66{dimensionless});
      otherwise:
        0.03{microS};
    endsel;
    ICs_on_Icontrol = sel
      case Cs_5_mM >= 1{dimensionless}:
        10.6015{millimolar}/5{millimolar}/(10.6015{millimolar}/5{millimolar}+exp(-0.71{dimensionless}*V/25{millivolt}));
      otherwise:
        1{dimensionless};
    endsel;
    i_fNa = sqr(y)*Kc/(Kc+Km_f)*g_f_Na*(V-E_Na)*ICs_on_Icontrol;
    i_fK = sqr(y)*Kc/(Kc+Km_f)*g_f_K*(V-E_K)*ICs_on_Icontrol;
    i_f = i_fNa+i_fK;
  enddef;

  def comp i_f_y_gate as
    var y: dimensionless {init: 0.181334538702451, pub: out};
    var tau_y: second;
    var y_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var ACh_shift: millivolt;
    var ACh: millimolar {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var Iso_shift: millivolt;
    ACh_shift = sel
      case ACh > 0{millimolar}:
        -1{millivolt}-9.898{millivolt}*pow(1{per_millimolar}*ACh, 0.618{dimensionless})/(pow(1{per_millimolar}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    Iso_shift = sel
      case Iso_1_uM > 0{dimensionless}:
        7.5{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    tau_y = 0.7166529{dimensionless}/(0.0708{per_second}*exp(-(V+5{millivolt}-ACh_shift-Iso_shift)/20.2791{millivolt})+10.6{per_second}*exp((V-ACh_shift-Iso_shift)/18{millivolt}));
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+52.5{millivolt}-ACh_shift-Iso_shift)/9{millivolt}));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp i_NaK as
    var i_NaK: nanoA {pub: out};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Km_Kp: millimolar {init: 1.4};
    var Km_Nap: millimolar {init: 14};
    var i_NaK_max: nanoA {init: 0.063};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var Iso_increase: dimensionless;
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    Iso_increase = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_NaK = Iso_increase*i_NaK_max*pow(1{dimensionless}+pow(Km_Kp/Kc, 1.2{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+exp(-(V-E_Na+110{millivolt})/20{millivolt}), -1{dimensionless});
  enddef;

  def comp i_NaCa as
    var i_NaCa: nanoA {pub: out};
    var K_NaCa: nanoA {init: 4};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    i_NaCa = K_NaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Ca_sub/Kci*exp(-Qci*V/RTONF)/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*V/(2{dimensionless}*RTONF))/di;
    k41 = exp(-Qn*V/(2{dimensionless}*RTONF));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*V/RTONF)/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*V/(2{dimensionless}*RTONF))/do;
    k32 = exp(Qn*V/(2{dimensionless}*RTONF));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no*(1{dimensionless}+Nao/K2no*(1{dimensionless}+Nao/K3no));
  enddef;

  def comp i_Na as
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 0.0125};
    var E_mh: millivolt;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Kc)/(Nai+0.12{dimensionless}*Ki));
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp i_Na_m_gate as
    var m: dimensionless {init: 0.440131579215766, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp i_Na_h_gate as
    var h: dimensionless {init: 1.3676940140066e-5, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}))+1{dimensionless});
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp i_CaL as
    var i_CaL: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siK: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    var ACh_block: dimensionless;
    var ACh: millimolar {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var P_CaL: nanoA_per_millimolar {init: 0.2};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in, priv: out};
    var dL: dimensionless {priv: in};
    var fL: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    var Iso_increase: dimensionless;
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    Iso_increase = sel
      case Iso_1_uM > 0{dimensionless}:
        1.23{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_siCa = 2{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siK = 0.000365{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Ki-Kc*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siNa = 0.0000185{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Nai-Nao*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    ACh_block = 0.31{dimensionless}*ACh/(ACh+0.00009{millimolar});
    i_CaL = (i_siCa+i_siK+i_siNa)*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase;
  enddef;

  def comp i_CaL_dL_gate as
    var dL: dimensionless {init: 0, pub: out};
    var dL_infinity: dimensionless;
    var tau_dL: second;
    var alpha_dL: per_second;
    var beta_dL: per_second;
    var adVm: millivolt;
    var bdVm: millivolt;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_shift: millivolt;
    var Iso_slope: dimensionless;
    var Iso_1_uM: dimensionless {pub: in};
    Iso_shift = sel
      case Iso_1_uM > 0{dimensionless}:
        -8{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    Iso_slope = sel
      case Iso_1_uM > 0{dimensionless}:
        0.69{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+20.3{millivolt}-Iso_shift)/(Iso_slope*4.2{millivolt})));
    tau_dL = 0.001{dimensionless}/(alpha_dL+beta_dL);
    alpha_dL = -0.02839{per_millivolt_second}*(adVm+41.8{millivolt}-Iso_shift)/(exp(-(adVm+41.8{millivolt}-Iso_shift)/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_second}*(adVm+6.8{millivolt}-Iso_shift)/(exp(-(adVm+6.8{millivolt}-Iso_shift)/4.8{millivolt})-1{dimensionless});
    adVm = sel
      case V == -41.8{millivolt}:
        -41.80001{millivolt};
      case V == 0{millivolt}:
        0{millivolt};
      case V == -6.8{millivolt}:
        -6.80001{millivolt};
      otherwise:
        V;
    endsel;
    beta_dL = 0.01143{per_millivolt_second}*(bdVm+1.8{millivolt}-Iso_shift)/(exp((bdVm+1.8{millivolt}-Iso_shift)/2.5{millivolt})-1{dimensionless});
    bdVm = sel
      case V == -1.8{millivolt}:
        -1.80001{millivolt};
      otherwise:
        V;
    endsel;
    ode(dL, time) = (dL_infinity-dL)/tau_dL;
  enddef;

  def comp i_CaL_fL_gate as
    var fL: dimensionless {init: 0.497133507285601, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+37.4{millivolt})/5.3{millivolt}));
    tau_fL = 0.001{dimensionless}*(44.3{second}+230{second}*exp(-sqr((V+36{millivolt})/10{millivolt})));
    ode(fL, time) = (fL_infinity-fL)/tau_fL;
  enddef;

  def comp i_CaL_fCa_gate as
    var fCa: dimensionless {init: 0.697998543259722, pub: out};
    var alpha_fCa: per_second {init: 0.01};
    var fCa_infinity: dimensionless;
    var tau_fCa: second;
    var Km_fCa: millimolar {init: 0.00035};
    var V: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var time: second {pub: in};
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = 0.001{dimensionless}*fCa_infinity/alpha_fCa;
    ode(fCa, time) = (fCa_infinity-fCa)/tau_fCa;
  enddef;

  def comp i_CaT as
    var i_CaT: nanoA {pub: out};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var P_CaT: nanoA_per_millimolar {init: 0.02};
    var RTONF: millivolt {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in, priv: out};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    i_CaT = 2{dimensionless}*P_CaT*V/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*V*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*V/RTONF))*dT*fT;
  enddef;

  def comp i_CaT_dT_gate as
    var dT: dimensionless {init: 0, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+38.3{millivolt})/5.5{millivolt}));
    tau_dT = 0.001{second}/(1.068{dimensionless}*exp((V+38.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(V+38.3{millivolt})/30{millivolt}));
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
  enddef;

  def comp i_CaT_fT_gate as
    var fT: dimensionless {init: 0, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+58.7{millivolt})/3.8{millivolt}));
    tau_fT = 1{second}/(16.67{dimensionless}*exp(-(V+75{millivolt})/83.3{millivolt})+16.67{dimensionless}*exp((V+75{millivolt})/15.38{millivolt}));
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
  enddef;

  def comp Ca_SR_release as
    var j_SRCarel: millimolar_per_second {pub: out};
    var R: dimensionless {init: 0.912317231017262};
    var O: dimensionless {init: 1.7340201253e-7};
    var I: dimensionless {init: 7.86181717518e-8};
    var RI: dimensionless {init: 0.211148145512825};
    var ks: per_second {init: 250000000};
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var EC50_SR: millimolar {init: 0.45};
    var HSR: dimensionless {init: 2.5};
    var koSRCa: per_millimolar2_second;
    var kiSRCa: per_millimolar_second;
    var koCa: per_millimolar2_second {init: 10000};
    var kiCa: per_millimolar_second {init: 500};
    var kCaSR: dimensionless;
    var kim: per_second {init: 5};
    var kom: per_second {init: 60};
    var time: second {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    ode(R, time) = kim*RI-kiSRCa*Ca_sub*R-(koSRCa*sqr(Ca_sub)*R-kom*O);
    ode(O, time) = koSRCa*sqr(Ca_sub)*R-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(I, time) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    ode(RI, time) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*R);
  enddef;

  def comp Ca_intracellular_fluxes as
    var j_Ca_dif: millimolar_per_second {pub: out};
    var j_up: millimolar_per_second {pub: out};
    var j_tr: millimolar_per_second {pub: out};
    var tau_dif_Ca: second {init: 4e-5};
    var tau_tr: second {init: 0.04};
    var P_up: millimolar_per_second;
    var P_up_basal: millimolar_per_second {init: 12};
    var b_up: dimensionless;
    var ACh: millimolar {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var K_up: millimolar {init: 0.0006};
    var Ca_nsr: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    b_up = sel
      case Iso_1_uM > 0{dimensionless}:
        -0.25{dimensionless};
      case ACh > 0{millimolar}:
        0.7{dimensionless}*ACh/(0.00009{millimolar}+ACh);
      otherwise:
        0{dimensionless};
    endsel;
    P_up = P_up_basal*(1{dimensionless}-b_up);
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_up = P_up/(1{dimensionless}+K_up/Cai);
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
  enddef;

  def comp Ca_buffering as
    var TC_tot: millimolar {init: 0.031, pub: out};
    var TMC_tot: millimolar {init: 0.062, pub: out};
    var CM_tot: millimolar {init: 0.045, pub: out};
    var CQ_tot: millimolar {init: 10, pub: out};
    var delta_fTC: per_second {pub: out};
    var delta_fTMC: per_second {pub: out};
    var delta_fCMs: per_second {pub: out};
    var delta_fCMi: per_second {pub: out};
    var delta_fCQ: per_second {pub: out};
    var delta_fTMM: per_second;
    var fTMM: dimensionless {init: 0.501049376634};
    var fCMi: dimensionless {init: 0.0373817991524254};
    var fCMs: dimensionless {init: 0.054381370046};
    var fTC: dimensionless {init: 0.0180519400676086};
    var fTMC: dimensionless {init: 0.281244308217086};
    var fCQ: dimensionless {init: 0.299624275428735};
    var kf_TC: per_millimolar_second {init: 88800};
    var kf_TMM: per_millimolar_second {init: 2277};
    var kf_TMC: per_millimolar_second {init: 227700};
    var kf_CM: per_millimolar_second {init: 227700};
    var kf_CQ: per_millimolar_second {init: 534};
    var kb_TC: per_second {init: 446};
    var kb_TMC: per_second {init: 7.51};
    var kb_TMM: per_second {init: 751};
    var kb_CM: per_second {init: 542};
    var kb_CQ: per_second {init: 445};
    var time: second {pub: in};
    var Mgi: millimolar {init: 2.5};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    ode(fTC, time) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{dimensionless}-fTC)-kb_TC*fTC;
    ode(fTMC, time) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, time) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, time) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fCMs, time) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{dimensionless}-fCMs)-kb_CM*fCMs;
    ode(fCQ, time) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_jsr*(1{dimensionless}-fCQ)-kb_CQ*fCQ;
  enddef;

  def comp Ca_dynamics as
    var Cai: millimolar {init: 1e-5, pub: out};
    var Ca_nsr: millimolar {init: 1.05386465080816, pub: out};
    var Ca_jsr: millimolar {init: 0.316762674605, pub: out};
    var Ca_sub: millimolar {init: 1e-5, pub: out};
    var V_i: millimetre3 {pub: in};
    var V_jsr: millimetre3 {pub: in};
    var V_nsr: millimetre3 {pub: in};
    var V_sub: millimetre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var j_SRCarel: millimolar_per_second {pub: in};
    var j_Ca_dif: millimolar_per_second {pub: in};
    var j_tr: millimolar_per_second {pub: in};
    var j_up: millimolar_per_second {pub: in};
    var TMC_tot: millimolar {pub: in};
    var CM_tot: millimolar {pub: in};
    var TC_tot: millimolar {pub: in};
    var CQ_tot: millimolar {pub: in};
    var delta_fTMC: per_second {pub: in};
    var delta_fCMi: per_second {pub: in};
    var delta_fCMs: per_second {pub: in};
    var delta_fTC: per_second {pub: in};
    var delta_fCQ: per_second {pub: in};
    var BAPTA_10_mM: dimensionless {pub: in};
    var BAPTA: millimolar;
    var kfBAPTA: per_millimolar_second {init: 940000};
    var kbBAPTA: per_second {init: 119.38};
    var fBAPTA: millimolar {init: 0, pub: out};
    var fBAPTA_sub: millimolar {init: 0, pub: out};
    var T: second {init: 6.928, pub: out};
    BAPTA = sel
      case (BAPTA_10_mM > 0{dimensionless}) and (time > T):
        10{millimolar};
      otherwise:
        0{millimolar};
    endsel;
    ode(Cai, time) = 1{dimensionless}*(j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC)-(kfBAPTA*Cai*(BAPTA-fBAPTA)-kbBAPTA*fBAPTA);
    ode(fBAPTA, time) = kfBAPTA*Cai*(BAPTA-fBAPTA)-kbBAPTA*fBAPTA;
    ode(Ca_sub, time) = j_SRCarel*V_jsr/V_sub-((i_siCa+i_CaT-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs)-(kfBAPTA*Ca_sub*(BAPTA-fBAPTA_sub)-kbBAPTA*fBAPTA_sub);
    ode(fBAPTA_sub, time) = kfBAPTA*Ca_sub*(BAPTA-fBAPTA_sub)-kbBAPTA*fBAPTA_sub;
    ode(Ca_nsr, time) = j_up-j_tr*V_jsr/V_nsr;
    ode(Ca_jsr, time) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
  enddef;

  def comp Cell_parameters as
    var V_sub: millimetre3 {pub: out};
    var V_jsr: millimetre3 {pub: out};
    var V_nsr: millimetre3 {pub: out};
    var V_i: millimetre3 {pub: out};
    var V_cell: millimetre3;
    var V_jsr_part: dimensionless {init: 0.0012};
    var V_i_part: dimensionless {init: 0.46};
    var V_nsr_part: dimensionless {init: 0.0116};
    var R_cell: micrometre {init: 4};
    var L_cell: micrometre {init: 70};
    var L_sub: micrometre {init: 0.02};
    V_cell = 0.000000001{micrometre_per_femtometre}*pi*sqr(R_cell)*L_cell;
    V_sub = 0.000000001{micrometre_per_femtometre}*2{dimensionless}*pi*L_sub*(R_cell-L_sub/2{dimensionless})*L_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_nsr = V_nsr_part*V_cell;
  enddef;

  def comp i_to as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 0.002};
    var E_K: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(V-E_K)*q*r;
  enddef;

  def comp i_to_q_gate as
    var q: dimensionless {init: 0.506139850982478, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/13{millivolt}));
    tau_q = 0.001{dimensionless}*0.6{dimensionless}*(65.17{dimensionless}/(0.57{per_second}*exp(-0.08{per_millivolt}*(V+44{millivolt}))+0.065{per_second}*exp(0.1{per_millivolt}*(V+45.93{millivolt})))+10.1{second});
    ode(q, time) = (q_infinity-q)/tau_q;
  enddef;

  def comp i_to_r_gate as
    var r: dimensionless {init: 0.0144605370597924, pub: out};
    var r_infinity: dimensionless;
    var tau_r: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-19.3{millivolt})/15{millivolt}));
    tau_r = 0.001{dimensionless}*0.66{dimensionless}*1.4{dimensionless}*(15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})))+2.98{second});
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp i_Kr as
    var i_Kr: nanoA {pub: out};
    var g_Kr: microS {init: 0.0021637};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var paS: dimensionless {priv: in};
    var paF: dimensionless {priv: in};
    var piy: dimensionless {priv: in};
    var RTONF: millivolt {pub: in};
    i_Kr = g_Kr*(V-E_K)*(0.9{dimensionless}*paF+0.1{dimensionless}*paS)*piy;
  enddef;

  def comp i_Kr_pa_gate as
    var paS: dimensionless {init: 0.322999177802891, pub: out};
    var paF: dimensionless {init: 0.0990510403258968, pub: out};
    var pa_infinity: dimensionless;
    var alfapaF: per_second;
    var betapaF: per_second;
    var tau_paS: second;
    var tau_paF: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alfapaF = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/6.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/11.9{millivolt})+0.96{dimensionless}*exp(-V/18.5{millivolt})));
    betapaF = 4{dimensionless}*((37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))/0.84655354{second}-1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/10.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))));
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+14.8{millivolt})/8.5{millivolt}));
    tau_paS = 0.84655354{second}/(4.2{dimensionless}*exp(V/17{millivolt})+0.15{dimensionless}*exp(-V/21.6{millivolt}));
    tau_paF = 1{second}/(30{dimensionless}*exp(V/10{millivolt})+exp(-V/12{millivolt}));
    ode(paS, time) = (pa_infinity-paS)/tau_paS;
    ode(paF, time) = (pa_infinity-paF)/tau_paF;
  enddef;

  def comp i_Kr_pi_gate as
    var piy: dimensionless {init: 0.705410877258545, pub: out};
    var pi_infinity: dimensionless;
    var tau_pi: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    tau_pi = 1{second}/(100{dimensionless}*exp(-V/54.645{millivolt})+656{dimensionless}*exp(V/106.157{millivolt}));
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.6{millivolt})/17.1{millivolt}));
    ode(piy, time) = (pi_infinity-piy)/tau_pi;
  enddef;

  def comp i_Ks as
    var i_Ks: nanoA {pub: out};
    var g_Ks: microS {pub: out};
    var E_Ks: millivolt;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    var n: dimensionless {priv: in};
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    g_Ks = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless}*0.0016576{microS};
      otherwise:
        0.0016576{microS};
    endsel;
    E_Ks = RTONF*ln((Ko+0{dimensionless}*Nao)/(Ki+0{dimensionless}*Nai));
    i_Ks = g_Ks*(V-E_Ks)*sqr(n);
  enddef;

  def comp i_Ks_n_gate as
    var n: dimensionless {init: 0, pub: out};
    var n_infinity: dimensionless;
    var tau_n: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var Iso_shift: millivolt;
    var shift: millivolt {init: 0};
    var alpha_n: per_second;
    var beta_n: per_second;
    Iso_shift = sel
      case Iso_1_uM > 0{dimensionless}:
        -14{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    n_infinity = 14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift)/12{millivolt}))/(14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift)/12{millivolt}))+1{per_second}*exp(-(V-Iso_shift)/45{millivolt}));
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 28{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift)/3{millivolt}));
    beta_n = 1{per_second}*exp(-(V-Iso_shift-shift-5{millivolt})/25{millivolt});
    ode(n, time) = (n_infinity-n)/tau_n;
  enddef;

  def comp i_KACh as
    var ACh: millimolar {pub: in, priv: out};
    var i_KACh: nanoA {pub: out};
    var g_KACh: microS {init: 0.00864};
    var E_K: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var a: dimensionless {priv: in};
    i_KACh = sel
      case ACh > 0{millimolar}:
        g_KACh*(V-E_K)*(1{dimensionless}+exp((V+20{millivolt})/20{millivolt}))*a;
      otherwise:
        0{nanoA};
    endsel;
  enddef;

  def comp i_KACh_a_gate as
    var a: dimensionless {init: 0, pub: out};
    var alpha_a: per_second;
    var beta_a: per_second;
    var a_infinity: dimensionless;
    var tau_a: second;
    var ACh: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_a = (3.5988{per_second}-0.025641{per_second})/(1{dimensionless}+0.0000012155{dimensionless}/pow(1{per_millimolar}*ACh, 1.6951{dimensionless}))+0.025641{per_second};
    beta_a = 10{per_second}*exp(0.0133{per_millivolt}*(V+40{millivolt}));
    a_infinity = alpha_a/(alpha_a+beta_a);
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    ode(a, time) = (a_infinity-a)/tau_a;
  enddef;

  def group as containment for
    comp Membrane incl
      comp Ionic_values;
      comp Voltage_clamp;
      comp i_NaK;
      comp i_NaCa;
      comp Ca_SR_release;
      comp Ca_intracellular_fluxes;
      comp Ca_buffering;
      comp Ca_dynamics;
      comp Cell_parameters;
      comp Nai_concentration;
      comp Rate_modulation_experiments;
      comp i_f incl
        comp i_f_y_gate;
      endcomp;
      comp i_Na incl
        comp i_Na_m_gate;
        comp i_Na_h_gate;
      endcomp;
      comp i_CaL incl
        comp i_CaL_dL_gate;
        comp i_CaL_fL_gate;
        comp i_CaL_fCa_gate;
      endcomp;
      comp i_CaT incl
        comp i_CaT_dT_gate;
        comp i_CaT_fT_gate;
      endcomp;
      comp i_to incl
        comp i_to_q_gate;
        comp i_to_r_gate;
      endcomp;
      comp i_Kr incl
        comp i_Kr_pa_gate;
        comp i_Kr_pi_gate;
      endcomp;
      comp i_Ks incl
        comp i_Ks_n_gate;
      endcomp;
      comp i_KACh incl
        comp i_KACh_a_gate;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp Membrane incl
      comp Voltage_clamp;
    endcomp;
    comp i_f incl
      comp i_f_y_gate;
    endcomp;
    comp i_Na incl
      comp i_Na_m_gate;
      comp i_Na_h_gate;
    endcomp;
    comp i_CaL incl
      comp i_CaL_dL_gate;
      comp i_CaL_fL_gate;
      comp i_CaL_fCa_gate;
    endcomp;
    comp i_CaT incl
      comp i_CaT_dT_gate;
      comp i_CaT_fT_gate;
    endcomp;
    comp i_to incl
      comp i_to_q_gate;
      comp i_to_r_gate;
    endcomp;
    comp i_Kr incl
      comp i_Kr_pa_gate;
      comp i_Kr_pi_gate;
    endcomp;
    comp i_Ks incl
      comp i_Ks_n_gate;
    endcomp;
    comp i_KACh incl
      comp i_KACh_a_gate;
    endcomp;
  enddef;
  def map between Membrane and Voltage_clamp for
    vars V_clamp and V_clamp;
    vars time and time;
  enddef;
  def map between Membrane and Ionic_values for
    vars RTONF and RTONF;
  enddef;
  def map between Membrane and environment for
    vars time and time;
  enddef;
  def map between Nai_concentration and environment for
    vars time and time;
  enddef;
  def map between i_f and environment for
    vars time and time;
  enddef;
  def map between i_NaK and environment for
    vars time and time;
  enddef;
  def map between i_NaCa and environment for
    vars time and time;
  enddef;
  def map between i_Na and environment for
    vars time and time;
  enddef;
  def map between i_CaL and environment for
    vars time and time;
  enddef;
  def map between i_CaT and environment for
    vars time and time;
  enddef;
  def map between Ca_SR_release and environment for
    vars time and time;
  enddef;
  def map between Ca_buffering and environment for
    vars time and time;
  enddef;
  def map between Ca_dynamics and environment for
    vars time and time;
  enddef;
  def map between i_to and environment for
    vars time and time;
  enddef;
  def map between i_Kr and environment for
    vars time and time;
  enddef;
  def map between i_Ks and environment for
    vars time and time;
  enddef;
  def map between i_KACh and environment for
    vars time and time;
  enddef;
  def map between Nai_concentration and Membrane for
    vars F and F;
  enddef;
  def map between i_f and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_f and i_f;
  enddef;
  def map between i_NaK and Membrane for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between i_NaCa and Membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars RTONF and RTONF;
  enddef;
  def map between i_Na and Membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars RTONF and RTONF;
  enddef;
  def map between i_CaL and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_CaL and i_CaL;
  enddef;
  def map between i_CaT and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_CaT and i_CaT;
  enddef;
  def map between Ca_dynamics and Membrane for
    vars F and F;
  enddef;
  def map between i_to and Membrane for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between i_Kr and Membrane for
    vars V and V;
    vars i_Kr and i_Kr;
    vars RTONF and RTONF;
  enddef;
  def map between i_Ks and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_Ks and i_Ks;
  enddef;
  def map between i_KACh and Membrane for
    vars V and V;
    vars i_KACh and i_KACh;
  enddef;
  def map between Nai_concentration and Ionic_values for
    vars Nai and Nai;
  enddef;
  def map between i_f and Ionic_values for
    vars E_Na and E_Na;
    vars E_K and E_K;
    vars Kc and Ko;
  enddef;
  def map between i_Na and Ionic_values for
    vars Nao and Nao;
    vars Kc and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_NaK and Ionic_values for
    vars Kc and Ko;
    vars E_Na and E_Na;
  enddef;
  def map between i_NaCa and Ionic_values for
    vars Nao and Nao;
    vars Cao and Cao;
  enddef;
  def map between Ca_dynamics and Ionic_values for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaL and Ionic_values for
    vars Cao and Cao;
    vars Nao and Nao;
    vars Kc and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_CaT and Ionic_values for
    vars Cao and Cao;
  enddef;
  def map between i_to and Ionic_values for
    vars E_K and E_K;
  enddef;
  def map between i_Kr and Ionic_values for
    vars Ko and Ko;
    vars E_K and E_K;
  enddef;
  def map between i_Ks and Ionic_values for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_KACh and Ionic_values for
    vars E_K and E_K;
  enddef;
  def map between i_f and i_f_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_CaL and i_CaL_dL_gate for
    vars dL and dL;
    vars time and time;
    vars V and V;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_CaL and i_CaL_fL_gate for
    vars fL and fL;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_CaL and i_CaL_fCa_gate for
    vars fCa and fCa;
    vars time and time;
    vars V and V;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaT and i_CaT_dT_gate for
    vars dT and dT;
    vars V and V;
    vars time and time;
  enddef;
  def map between i_CaT and i_CaT_fT_gate for
    vars fT and fT;
    vars V and V;
    vars time and time;
  enddef;
  def map between i_to and i_to_q_gate for
    vars q and q;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_to and i_to_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kr and i_Kr_pa_gate for
    vars paF and paF;
    vars paS and paS;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kr and i_Kr_pi_gate for
    vars piy and piy;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ks and i_Ks_n_gate for
    vars n and n;
    vars time and time;
    vars V and V;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_KACh and i_KACh_a_gate for
    vars a and a;
    vars time and time;
    vars V and V;
    vars ACh and ACh;
  enddef;
  def map between Nai_concentration and i_Ks for
    vars Nai and Nai;
  enddef;
  def map between Ca_dynamics and Cell_parameters for
    vars V_i and V_i;
    vars V_jsr and V_jsr;
    vars V_nsr and V_nsr;
    vars V_sub and V_sub;
  enddef;
  def map between Ca_dynamics and Ca_buffering for
    vars TMC_tot and TMC_tot;
    vars CM_tot and CM_tot;
    vars TC_tot and TC_tot;
    vars CQ_tot and CQ_tot;
    vars delta_fTMC and delta_fTMC;
    vars delta_fCMi and delta_fCMi;
    vars delta_fCMs and delta_fCMs;
    vars delta_fTC and delta_fTC;
    vars delta_fCQ and delta_fCQ;
    vars Cai and Cai;
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
  enddef;
  def map between i_NaCa and Ca_dynamics for
    vars i_NaCa and i_NaCa;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_SR_release and Ca_dynamics for
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars j_SRCarel and j_SRCarel;
  enddef;
  def map between Ca_intracellular_fluxes and Ca_dynamics for
    vars Cai and Cai;
    vars Ca_nsr and Ca_nsr;
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars j_Ca_dif and j_Ca_dif;
    vars j_tr and j_tr;
    vars j_up and j_up;
  enddef;
  def map between i_CaL and Ca_dynamics for
    vars i_siCa and i_siCa;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaT and Ca_dynamics for
    vars i_CaT and i_CaT;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Nai_concentration and Cell_parameters for
    vars V_i and V_i;
    vars V_sub and V_sub;
  enddef;
  def map between Nai_concentration and i_f for
    vars i_fNa and i_fNa;
  enddef;
  def map between Nai_concentration and i_NaK for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between Nai_concentration and i_NaCa for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Nai_concentration and i_Na for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between Nai_concentration and i_CaL for
    vars Nai and Nai;
    vars i_siNa and i_siNa;
  enddef;
  def map between i_f and Rate_modulation_experiments for
    vars Iva_3_uM and Iva_3_uM;
    vars Cs_5_mM and Cs_5_mM;
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_CaL and Rate_modulation_experiments for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_NaK and Rate_modulation_experiments for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_Ks and Rate_modulation_experiments for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_KACh and Rate_modulation_experiments for
    vars ACh and ACh;
  enddef;
  def map between Ca_dynamics and Rate_modulation_experiments for
    vars BAPTA_10_mM and BAPTA_10_mM;
  enddef;
  def map between Ca_intracellular_fluxes and Rate_modulation_experiments for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Nai_concentration and Rate_modulation_experiments for
    vars BAPTA_10_mM and BAPTA_10_mM;
  enddef;
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "aslanidi_atrial_model_2009", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // Keyword(s)
  // Reference
  // make additional copies of this rdf:li block
  //                       for more authors
  // Reference title
enddef;
