<?xml version="1.0" encoding="UTF-8"?>
<!-- CellML 1.0, 3.4.2.1: Component children can come in any order. Although
                          units, variable, reaction, math is preferred. -->
<model name="component_child_order_1"
       xmlns="http://www.cellml.org/cellml/1.0#"
       xmlns:cellml="http://www.cellml.org/cellml/1.0#">
  <component name="A">
    <units name="a">
      <unit units="volt" />
    </units>
    <units name="b">
      <unit units="volt" />
    </units>
    <variable name="a" units="dimensionless" />
    <variable name="b" units="dimensionless" />
    <variable name="c" units="dimensionless" />
    <variable name="d" units="dimensionless" />
    <variable name="e" units="dimensionless" />
    <reaction>
      <variable_ref variable="d">
        <role role="reactant" />
      </variable_ref>
    </reaction>
    <reaction>
      <variable_ref variable="e">
        <role role="reactant" />
      </variable_ref>
    </reaction>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>a</ci>
        <cn cellml:units="dimensionless">1</cn>
      </apply>
      <apply>
        <eq/>
        <ci>b</ci>
        <cn cellml:units="dimensionless">2</cn>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>c</ci>
        <cn cellml:units="dimensionless">3</cn>
      </apply>
    </math>
  </component>
</model>
