<?xml version="1.0" encoding="UTF-8"?>
<!-- CellML 1.0, 4.2.3: The MathML "CellML subset"
Basic functions: power, root (degree), exp, ln, log (logbase) -->
<model name="mathml_functions_basic"
       xmlns="http://www.cellml.org/cellml/1.0#"
       xmlns:cellml="http://www.cellml.org/cellml/1.0#">
  <component name="A">
    <variable name="power" units="dimensionless" />
    <variable name="root" units="dimensionless" />
    <variable name="root_with_degree" units="dimensionless" />
    <variable name="exp" units="dimensionless" />
    <variable name="ln" units="dimensionless" />
    <variable name="log" units="dimensionless" />
    <variable name="log_with_logbase" units="dimensionless" />
    <variable name="log_with_logbase_10" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>power</ci>
        <apply>
          <power />
          <apply>
            <plus />
            <cn cellml:units="dimensionless">1.2</cn>
            <cn cellml:units="dimensionless">3.4</cn>
          </apply>
          <apply>
            <plus />
            <cn cellml:units="dimensionless">4.3</cn>
            <cn cellml:units="dimensionless">2.1</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>root</ci>
        <apply>
          <root />
          <apply>
            <times />
            <cn cellml:units="dimensionless">3</cn>
            <cn cellml:units="dimensionless">3</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>root_with_degree</ci>
        <apply>
          <root />
          <degree>
            <apply>
              <plus />
              <cn cellml:units="dimensionless">1</cn>
              <cn cellml:units="dimensionless">1</cn>
              <cn cellml:units="dimensionless">1</cn>
            </apply>
          </degree>
          <apply>
            <times />
            <cn cellml:units="dimensionless">3</cn>
            <cn cellml:units="dimensionless">3</cn>
            <cn cellml:units="dimensionless">3</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>exp</ci>
        <apply>
          <exp />
          <apply>
            <plus />
            <cn cellml:units="dimensionless">1.2</cn>
            <cn cellml:units="dimensionless">-2.3</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>ln</ci>
        <apply>
          <ln />
          <apply>
            <plus />
            <cn cellml:units="dimensionless">2</cn>
            <cn cellml:units="dimensionless">0.718281828459045</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>log</ci>
        <apply>
          <log />
          <apply>
            <plus />
            <cn cellml:units="dimensionless">82</cn>
            <cn cellml:units="dimensionless">18</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>log_with_logbase</ci>
        <apply>
          <log />
          <logbase>
            <apply>
              <plus />
              <cn cellml:units="dimensionless">1</cn>
              <cn cellml:units="dimensionless">1</cn>
            </apply>
          </logbase>
          <apply>
            <plus />
            <cn cellml:units="dimensionless">1000</cn>
            <cn cellml:units="dimensionless">24</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>log_with_logbase_10</ci>
        <apply>
          <log />
          <logbase>
            <cn cellml:units="dimensionless">10</cn>
          </logbase>
          <apply>
            <plus />
            <cn cellml:units="dimensionless">560</cn>
            <cn cellml:units="dimensionless">440</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
</model>
