<?xml version="1.0" encoding="UTF-8"?>
<!-- CellML 1.0, 4.2.3: The MathML "CellML subset"
Comparison operators: eq, neq, gt, lt, geq, leq -->
<model name="mathml_logic_comparisons"
       xmlns="http://www.cellml.org/cellml/1.0#"
       xmlns:cellml="http://www.cellml.org/cellml/1.0#">
  <component name="A">
    <variable name="x" units="dimensionless" initial_value="0" />
    <variable name="eq" units="dimensionless" />
    <variable name="neq" units="dimensionless" />
    <variable name="gt" units="dimensionless" />
    <variable name="lt" units="dimensionless" />
    <variable name="geq" units="dimensionless" />
    <variable name="leq" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>eq</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1</cn>
            <apply>
              <eq />
              <ci>x</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>neq</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1</cn>
            <apply>
              <neq />
              <ci>x</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>gt</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1</cn>
            <apply>
              <gt />
              <ci>x</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>lt</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1</cn>
            <apply>
              <lt />
              <ci>x</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>geq</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1</cn>
            <apply>
              <geq />
              <ci>x</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>leq</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1</cn>
            <apply>
              <leq />
              <ci>x</ci>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">0</cn>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
</model>
